<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindBehaviorDynamicRoutingBonsaiDataSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:p3="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath>..\local\example_AindBehaviorDynamicRoutingBonsaiTaskLogic.json</TaskLogicPath>
        <RigPath>..\local\AindBehaviorDynamicRoutingBonsaiRig.json</RigPath>
        <SessionPath>..\local\AindBehaviorSessionModel.json</SessionPath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorSessionModel" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorDynamicRoutingBonsaiRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorDynamicRoutingBonsaiTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SessionSettings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RngSeed</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateContinuousUniform">
                <p2:Lower>0</p2:Lower>
                <p2:Upper>10</p2:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>CheckNull</scr:Name>
              <scr:Expression>Item1.HasValue ? Item1.Value : Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeedValue</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Seed" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed>2</num:Seed>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeed</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>ScreenConfiguration</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Screen</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DisplayDevice" Selector="DisplayIndex" />
                      <Property Name="TargetRenderFrequency" Selector="TargetRenderFrequency" />
                      <Property Name="TargetUpdateFrequency" Selector="TargetUpdateFrequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateWindow">
                      <gl:Width>1000</gl:Width>
                      <gl:Height>1000</gl:Height>
                      <gl:Title>DynamicRouting</gl:Title>
                      <gl:VSync>Off</gl:VSync>
                      <gl:SwapSync>false</gl:SwapSync>
                      <gl:ClearColor>Black</gl:ClearColor>
                      <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                      <gl:CursorVisible>false</gl:CursorVisible>
                      <gl:Location xsi:nil="true" />
                      <gl:WindowBorder>Resizable</gl:WindowBorder>
                      <gl:WindowState>Fullscreen</gl:WindowState>
                      <gl:DisplayDevice>Second</gl:DisplayDevice>
                      <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                      <gl:TargetUpdateFrequency>120</gl:TargetUpdateFrequency>
                      <gl:RenderState />
                      <gl:GraphicsMode>
                        <gl:ColorFormat>
                          <gl:Red>8</gl:Red>
                          <gl:Green>8</gl:Green>
                          <gl:Blue>8</gl:Blue>
                          <gl:Alpha>8</gl:Alpha>
                        </gl:ColorFormat>
                        <gl:Depth>16</gl:Depth>
                        <gl:Stencil>0</gl:Stencil>
                        <gl:Samples>0</gl:Samples>
                        <gl:AccumulatorFormat>
                          <gl:Red>0</gl:Red>
                          <gl:Green>0</gl:Green>
                          <gl:Blue>0</gl:Blue>
                          <gl:Alpha>0</gl:Alpha>
                        </gl:AccumulatorFormat>
                        <gl:Buffers>2</gl:Buffers>
                        <gl:Stereo>false</gl:Stereo>
                      </gl:GraphicsMode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:RenderResources.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="res:LoadResources" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Screen.Calibration</Selector>
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>LoadDisplayCalibration</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>calibration</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>calibration</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Left</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DisplayCalibration.bonsai" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>calibration</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Center</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DisplayCalibration.bonsai" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>calibration</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Right</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DisplayCalibration.bonsai" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(
Item1 as Left,
Item2 as Center,
Item3 as Right)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="11" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="11" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source3" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>DisplayCalibration</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>RenderLoop</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>RenderLoop</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:RenderFrame" />
                              </Expression>
                              <Expression xsi:type="rx:PublishSubject">
                                <Name>RenderFrame</Name>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
                                <Left>-1</Left>
                                <Right>1</Right>
                                <Bottom>-1</Bottom>
                                <Top>1</Top>
                              </Expression>
                              <Expression xsi:type="rx:PublishSubject">
                                <Name>Draw2DStim</Name>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                                <X>0</X>
                                <Y>0</Y>
                                <Width>1</Width>
                                <Height>1</Height>
                              </Expression>
                              <Expression xsi:type="rx:PublishSubject">
                                <Name>PostDrawing</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:DisplaySynchQuad.bonsai">
                          <Minimum>2</Minimum>
                          <Maximum>6</Maximum>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
                            <Combinator xsi:type="FloatProperty">
                              <Value>1</Value>
                            </Combinator>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
                            <Combinator xsi:type="rx:Take">
                              <rx:Count>1</rx:Count>
                            </Combinator>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="rx:BehaviorSubject">
                            <Name>WorldContrast</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="SubscribeSubject">
                            <Name>RigSchema</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="MemberSelector">
                            <Selector>Screen</Selector>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="MemberSelector">
                            <Selector>Contrast</Selector>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="SubscribeSubject">
                            <Name>WorldContrast</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
                            <Combinator xsi:type="rx:CombineLatest" />
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Multiply" />
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="MulticastSubject">
                            <Name>DisplayContrast</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="SubscribeSubject">
                            <Name>RigSchema</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="MemberSelector">
                            <Selector>Screen</Selector>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="MemberSelector">
                            <Selector>Brightness</Selector>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="MulticastSubject">
                            <Name>DisplayBrightness</Name>
                          </Builder>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="9" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TaskLogicParameters</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TaskBlocks</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>DoBlock</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Block</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Block</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TrialSets</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>DoTrialSet</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>TrialSet</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialSet</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AvailableTrials</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:UniformSampleList" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>DoTrial</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialSet</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Repeats</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:RepeatCount">
                      <rx:Count>0</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="11" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>